[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/work/gsharov/Movies/Images-Disc1/GridSquare_15465465/Data/",
        "filesPattern": "*tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 1.4,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.885,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 1.277,
        "gainFile": "/work/gsharov/Movies/gain.mrc",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 10800,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtRelionMotioncor",
        "object.id": "87",
        "object.label": "relion - motion correction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "sumFrame0": 1,
        "sumFrameN": 24,
        "doDW": true,
        "saveNonDW": false,
        "savePSsum": true,
        "dosePSsum": 4.0,
        "doComputePSD": false,
        "doComputeMicThumbnail": true,
        "extraParams": "",
        "bfactor": 150,
        "patchX": 5,
        "patchY": 5,
        "groupFrames": 1,
        "binFactor": 1.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "hostName": "localhost",
        "numberOfThreads": 40,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "178",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": true,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 5,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "87.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "241",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputModelFrom": 0,
        "conservPickVar": 0.3,
        "lowPassFilter": false,
        "absCutOffFreq": 0.1,
        "numCpus": 4,
        "input_size": 1024,
        "boxSize": 0,
        "max_box_per_image": 600,
        "useGpu": true,
        "gpuList": "0, 1",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "87.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "295",
        "object.label": "relion - particles extraction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": true,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 200,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "hostName": "localhost",
        "numberOfMpi": 5,
        "inputCoordinates": "241.outputCoordinates"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "362",
        "object.label": "emfacilities - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "2",
            "87",
            "178",
            "241",
            "295"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 1000.0,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "doInflux": false,
        "publishCmd": ""
    }
]